PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = SignalDetection_Experiment
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    CodeComponent Code
      Code Type = Auto->JS
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      Begin Experiment:
        if random() > 0.5:
            tilt = 0;
            corr_resp = 'up'
        else:

            if random() > 0.5:
                tilt = randint(1,5)
                corr_resp = 'down'
            else:
                tilt = randint(-5,-1)
                corr_resp = 'down'
      End Routine:
        trials.addData('tilt',tilt)

        if random() > 0.5:
            tilt = 0;
            corr_resp = 'up'
        else:

            if random() > 0.5:
                tilt = randint(1,5)
                corr_resp = 'down'
            else:
                tilt = randint(-5,-1)
                corr_resp = 'down'
    PolygonComponent Fixation
      fillColor = white
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = pix
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    GratingComponent grating
      contrast = 0.3
      mask = gauss
      ori [set every repeat] = tilt
      saveStartStop = False
      sf = 5
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.3
      tex = sin
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    KeyboardComponent key_resp
      allowedKeys = 'up' , 'down'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 1
      storeCorrect = True
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  Routine Welcome
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Welcome to the experiment!

        For this experiment, you are supposed to press the "up arrow key" when the stimuli displayed is aligned straight, and the "down arrow key" when the stimuli is tilted.

        You may exit the experiment at any point of time by pressing the "esc key".

        Press "space" to start the experiment.
  Routine Thank_You
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Thank you for your participation.

        Press "space" to end the experiment.
Flow
  Routine Welcome
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine trial
  LoopTerminator trials
  Routine Thank_You
