PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001', 'age': '', 'gender': "'man','woman','non-binary','prefer not to say'"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = SimonTask
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Instructions
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    CodeComponent setupMap
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        # Random mapping once per participant
        if random.random() < 0.5:
            key_for_square = 'q'
            key_for_circle = 'p'
        else:
            key_for_square = 'p'
            key_for_circle = 'q'

        # Save to expInfo so it's visible in data/output
        expInfo['key_for_square'] = key_for_square
        expInfo['key_for_circle'] = key_for_circle
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this experiment, you are supposed to press the key "Q" when you see a square and press the key "P" when you see a circle regardless of the side they appear on.

        You can end the experiment at any time by pressing the "esc" key.

        Press "space" key to start the experiment
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    PolygonComponent rectstim
      fillColor = blue
      lineColor = blue
      opacity [set every repeat] = 1 if shape == 'square' else 0
      pos [set every repeat] = $(-0.4, 0) if side == 'left' else (0.4, 0)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.5
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    PolygonComponent circstim
      fillColor = blue
      lineColor = blue
      opacity [set every repeat] = 1 if shape == 'circle' else 0
      pos [set every repeat] = $(-0.4, 0) if side == 'left' else (0.4, 0)
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.5
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    KeyboardComponent key_resp
      allowedKeys = 'q','p'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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    CodeComponent triallogic
      Code Type = Auto->JS
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      Begin Routine:
        # Determine position based on side
        # Use normalized units: left/right offsets (adjust to taste)
        if side == 'left':
            posXY = (-0.4, 0.0)
        else:
            posXY = (0.4, 0.0)

        # Determine the correct key for this shape
        if shape == 'square':
            corrKey = key_for_square
        else:
            corrKey = key_for_circle

        # Define stimulus and response "sides" to label congruency
        stim_side = side  # 'left' or 'right'
        resp_side = 'left' if corrKey == 'q' else 'right'
        congruent = int(stim_side == resp_side)

        # Reset keyboard (in case)
        key_resp.keys = []
        key_resp.rt = None
      End Routine:
        # Score correctness
        correct = 0
        if key_resp.keys:
            correct = int(key_resp.keys == corrKey)

        # Save trial-level data
        thisExp.addData('corrKey', corrKey)
        thisExp.addData('correct', correct)
        thisExp.addData('congruent', congruent)
        thisExp.addData('stim_side', stim_side)
        thisExp.addData('resp_side', resp_side)
  Routine TooSlow
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    TextComponent slowtext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Please Respond Faster
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # Show this routine only if the previous trial had no response key
        if key_resp.keys:
            continueRoutine = False
  Routine Thank_You
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    TextComponent ThankYou
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for your participation in the experiment. Your data will remain confidential, and will only be used for research purposes.

        Press "space" to end the experiment.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Experiment_Begins
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    CodeComponent setupMap_2
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        # Random mapping once per participant
        if random.random() < 0.5:
            key_for_square = 'q'
            key_for_circle = 'p'
        else:
            key_for_square = 'p'
            key_for_circle = 'q'

        # Save to expInfo so it's visible in data/output
        expInfo['key_for_square'] = key_for_square
        expInfo['key_for_circle'] = key_for_circle
    TextComponent FinalText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this experiment, you are supposed to press the key "Q" when you see a square and press the key "P" when you see a circle regardless of the side they appear on.

        You can end the experiment at any time by pressing the "esc" key.

        Press "space" key to start the experiment
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Final_Instructions
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now that you have understood, press "space" to begin the experiment

        You can end the experiment any time by pressing the "esc" key
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditionsfile.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('shape', 'square'), ('side', 'left')]),
      OrderedDict([('shape', 'square'), ('side', 'right')]),
      OrderedDict([('shape', 'circle'), ('side', 'left')]),
      OrderedDict([('shape', 'circle'), ('side', 'right')])]
    Routine trial
  LoopTerminator trials
  Routine Final_Instructions
  LoopInitiator experiment loopType="TrialHandler"
    conditionsFile = conditionsfile.csv
    loopType = random
    nReps = 25
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    conditions:
      [OrderedDict([('shape', 'square'), ('side', 'left')]),
      OrderedDict([('shape', 'square'), ('side', 'right')]),
      OrderedDict([('shape', 'circle'), ('side', 'left')]),
      OrderedDict([('shape', 'circle'), ('side', 'right')])]
    Routine trial
  LoopTerminator experiment
  Routine Thank_You
