PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'Gender': "'Man', 'Woman', 'Non-Binary', 'Prefer Not to Say'", 'Age': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1000,600]
  expName = StairCase_Experiment
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    CodeComponent fiftyfifty
      Code Type = Auto->JS
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      Begin Routine:
        if random ()>0.5: # 50:50 probability
            direction = -level
            correct_resp = 'left'
        else:
            direction = level
            correct_resp = 'right'
      End Routine:
        thisExp.addData('corrAns', correct_resp)
        thisExp.addData('tilt', direction)
        thisExp.addData('key_resp.corr',key_resp.corr)
    PolygonComponent Fixation
      fillColor = white
      shape = cross
      size = (0.1,0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    GratingComponent grating
      contrast = 0.5
      mask = gauss
      ori [set every repeat] = direction
      sf = 8
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.3
      tex = sin
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $correct_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine Welcome
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank You for participating in the experiment.

        In this experiment, if the stimuli displayed is tilted towards the left, press the key "Left Arrow Key", and if it is tilted towards the right, press the key "Right Arrow Key" on your keyboard.

        In case you wish to exit the experiment in the middle, you can press the "esc" key.

        Once you have read and understood the instructions, press "space" to start the experiment.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thank_You
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for your participation.

        Press 'space' to end the experiment.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
  LoopInitiator Staircase loopType="StairHandler"
    N down = 1
    N up = 3
    loopType = staircase
    max value = 20
    min value = 1
    nReps = 75
    start value = 10
    step sizes = (10,5,2.5,1,0.5)
    step type = log
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    Routine trial
  LoopTerminator Staircase
  Routine Thank_You
