PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'Age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  expName = WordPriming_Experiment
  keyboardBackend = PsychToolbox
  runMode = 1
  rush = True
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Routines
  Routine Routine1
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    TextComponent StudyText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $Study_word
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    SliderComponent Studyslider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = 'Familiar','Unfamiliar'
      letterHeight = 0.05
      pos = (0,-0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine Routine2
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    TextComponent TestText
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text [set every repeat]:
        $test_word
    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent submit_text
      letterHeight = 0.05
      pos = (0,-0.3)
      startVal [time (s)] = 0.0
      text = Click to Submit
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    MouseComponent testmouse
      clickable = submit_text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/Darsh Modi/OneDrive/Documents/AU/PSY310/WordPriming/ConditionsFile_R1.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Study_word', 'book')]),
      OrderedDict([('Study_word', 'cushion')]),
      OrderedDict([('Study_word', 'phone')]),
      OrderedDict([('Study_word', 'marble')]),
      OrderedDict([('Study_word', 'board')]),
      OrderedDict([('Study_word', 'Laptop')]),
      OrderedDict([('Study_word', 'Chart')]),
      OrderedDict([('Study_word', 'T-shirt')]),
      OrderedDict([('Study_word', 'mouse')]),
      OrderedDict([('Study_word', 'Pastry')]),
      OrderedDict([('Study_word', 'Case')]),
      OrderedDict([('Study_word', 'Cruise')]),
      OrderedDict([('Study_word', 'Police')]),
      OrderedDict([('Study_word', 'Keys')]),
      OrderedDict([('Study_word', 'Poster')])]
    Routine Routine1
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = ConditionsFile_R2.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('test_word', 'l_pt_p'), ('Reference', 'Laptop'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_ha_t'), ('Reference', 'Chart'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'T_hi_t'), ('Reference', 'Tshirt'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_ou_e'), ('Reference', 'Mouse'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'P_str_'), ('Reference', 'Pastry'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'c_s_'), ('Reference', 'Case'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_ru_s_'), ('Reference', 'Cruise'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'P_li_e'), ('Reference', 'Police'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'K_y_'), ('Reference', 'Keys'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'P_st_r'), ('Reference', 'Poster'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_o_rd'), ('Reference', 'Board'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_a_bl_'), ('Reference', 'Marble'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_ho_e'), ('Reference', 'Phone'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_oo_'), ('Reference', 'Book'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'c_s_io_'), ('Reference', 'Cushion'), ('old_new', 'old')]),
      OrderedDict([('test_word', 't_a_l_'), ('Reference', 'Table'), ('old_new', 'new')]),
      OrderedDict([('test_word', 'p_nc_l'), ('Reference', 'Pencil'), ('old_new', 'new')]),
      OrderedDict([('test_word', 'v_s_'), ('Reference', 'Vase'), ('old_new', 'new')])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
    Routine Routine2
  LoopTerminator trials_2
